CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160503183100
GitHash:ac0529e
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '---', "Load the color image by matching files in the folder against the text '6-1.jpg'. Load the template image as a binary mask. See details on the pipeline protocol at http://www.cellprofiler.org/linked_files/Papers/31-Vokes_CurrentProtocols_2008.pdf."]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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Select the rule criteria:and (file does contain ".JPG")
    Name to assign these images:OrigColor
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['Convert color to gray']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
    Select the input image:OrigColor
    Conversion method:Combine
    Image type:RGB
    Name the output image:InvertGray
    Relative weight of the red channel:1
    Relative weight of the green channel:1
    Relative weight of the blue channel:1
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
Crop:[module_num:6|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
    Select the input image:InvertGray
    Name the output image:CropBlue
    Select the cropping shape:Ellipse
    Select the cropping method:Mouse
    Apply which cycle's cropping pattern?:Every
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    Remove empty rows and columns?:No
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
CorrectIlluminationCalculate:[module_num:7|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notes:["Correct for uneven illumination by creating an illumination correction function. Since most of the image is background, we use the 'Background' method here. The idea is to smooth the function enough so that it reflects the uneven intensity variation."]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
    Select the input image:CropBlue
    Name the output image:IllumGray
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:8|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notes:['Apply the illumination function previously created to correct the original image. ']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
    Select the input image:CropBlue
    Name the output image:CorrGray
    Select the illumination function:IllumGray
    Select how the illumination function is applied:Subtract

IdentifyPrimaryObjects:[module_num:9|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notes:['Identify all colonies within the plate. Use the red channel image, since both red and white colonies are bright in this image. Adjust the min/max diameter depending on the expected colony size in your own images.']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
    Select the input image:CorrGray
    Name the primary objects to be identified:Prespots
    Typical diameter of objects, in pixel units (Min,Max):10,230
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:PrespotOutlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.001,1
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
MeasureObjectSizeShape:[module_num:10|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notes:['Measure area and shape features of each colony.']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
    Select objects to measure:Prespots
    Calculate the Zernike features?:No

FilterObjects:[module_num:11|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notes:['Eliminate non-circular objects']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
    Name the output objects:FilteredSpots
    Select the object to filter:Prespots
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:Yes
    Name the outline image:ColonyOutlines
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    Measurement count:2
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.9
    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:3000
    Filter using a maximum measurement value?:No
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
OverlayOutlines:[module_num:12|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notes:['Overlay the colony outlines upon the MaskedRedPlate image.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:InvertGray
    Name the output image:OutlinedColonies
    Outline display mode:Color
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    Width of outlines:5
    Select outlines to display:ColonyOutlines
    Select outline color:red
    Load outlines from an image or objects?:Image
    Select objects to display:FilteredSpots

SaveImages:[module_num:13|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notes:["Save the outline overlay image as an 8-bit TIF, using the same name as the original image, plus '_outlines' as a suffix. Save the image to the default output folder."]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
    Select the type of image to save:Image
    Select the image to save:OutlinedColonies
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    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigColor
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outlines
    Saved file format:png
    Output file location:Elsewhere...|C:\\\\\\\\micseg\\\\\\\\DATA\\\\\\\\Benchmark\\\\\\\\Pseudomonas aeruginosa\\\\\\\\CellProfiler
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:ColonyOutlines
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    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigColor
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_object outlines
    Saved file format:jpg
    Output file location:Elsewhere...|C:\\\\\\\\micseg\\\\\\\\DATA\\\\\\\\Benchmark\\\\\\\\Pseudomonas aeruginosa\\\\\\\\CellProfiler
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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